PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Adaptive_staircase_Diar
  keyboardBackend = ioHub
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Routines
  Routine Adap_staircase
    KeyboardComponent trial_resp
      allowedKeys = 's','d'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [frame N] = 120
      storeCorrect = True
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    CodeComponent standard
      Code Type = Py
      Begin Experiment:
        from syntacts import *
        from time import sleep

        session = Session()

        # Here we create one of the signals
        amp = 1.0
        sin = Sine(125) # Standard Frequency of 125Hz
        asr = ASR(0.05, 0.9, 0.05) # Attack (A) susain (S) Release (R)
        sig2 = sin * asr * amp
      Begin Routine:
        # Here we create one of the signals
        amp = 1.0
        sin = Sine(125) # Standard Frequency of 125Hz
        asr = ASR(0.05, 0.9, 0.05) # Attack (A) susain (S) Release (R)
        sig2 = sin * asr * amp

        # Here we create the other signal
        amp = 1.0
        sin = Sine(level) # Stimulus
        asr = ASR(0.05, 0.9, 0.05)
        sig3 = sin * asr * amp

        # Here we apply the two signals simultaneously to the audio output channels
        session.open(6) #
        session.play(0, sig2) # plays sig 1 on channel 0
        session.play(2, sig3) # plays sig 1 on channel 0

        sleep(sig2.length)    #plays stimulus for duration of the signal
    TextComponent response
      letterHeight = 0.05
      startVal [frame N] = 120
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      text:
        Same or different?

        Press 's' for same and 'd' for different
    CodeComponent corr_ans
      Code Type = Py
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      Begin Routine:
        if level==125:
            CorrectAns='s'
        else:
            CorrectAns='d'
    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    StaticComponent ISI_2
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
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  Routine start_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions/welcome

        press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent thank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating
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Flow
  Routine start_screen
  LoopInitiator stair loopType="StairHandler"
    N down = 2
    N reversals = 6
    N up = 1
    loopType = staircase
    max value = 400
    min value = 90
    nReps = 50
    start value = 90
    step sizes = [40,40,40,30,30,30,30,20,20,20,20,10,10,10,10,10,10]
    step type = lin
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    Routine Adap_staircase
  LoopTerminator stair
  Routine thanks
